PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Stroop effect
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = norm
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    TextComponent text
      color [set every repeat] = $Color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $Word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $Corr_res
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Welcome
  Routine Thankyou
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thankyou!
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = OneDrive/Pictures/Documents/Cond.xlsx
    loopType = random
    nReps = 11
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    conditions:
      [{'Word': 'RED', 'Color': 'Red', 'Stimulus_cond': 'C', 'Corr_res': 'r'},
      {'Word': 'RED', 'Color': 'Blue', 'Stimulus_cond': 'I', 'Corr_res': 'b'},
      {'Word': 'BLUE', 'Color': 'Blue', 'Stimulus_cond': 'C', 'Corr_res': 'b'},
      {'Word': 'BLUE', 'Color': 'Red', 'Stimulus_cond': 'I', 'Corr_res': 'r'}]
    Routine trial
  LoopTerminator trials
  Routine Thankyou
