PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'height': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = solo
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
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    ImageComponent face_image
      image [set every repeat] = $faces
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
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    TextComponent reminder_text
      letterHeight = 0.04
      pos = (0, -0.6)
      startVal [time (s)] = 1.0
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      text:
        F = Happy
        G = Neutral
        H = Sad
    KeyboardComponent key_resp
      allowedKeys = 'f','g','h'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine Instructions
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    TextComponent Instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Welcome to the experiment!

        You will see faces showing different emotions: Happy, Neutral, Sad.

        Press:
        F = Happy
        G = Neutral
        H = Sad

        Respond as quickly and accurately as possible.

        Press SPACE to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition file.xlsx
    loopType = random
    nReps = 12
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    conditions:
      [{'faces': 'faces/men_happy.jpg', 'emotion': 'happy', 'correct_resp': 'f'},
      {'faces': 'faces/men_sad.jpg', 'emotion': 'sad', 'correct_resp': 'h'},
      {'faces': 'faces/men_neutral.jpg', 'emotion': 'neutral', 'correct_resp': 'g'},
      {'faces': 'faces/female_happy.jpg', 'emotion': 'happy', 'correct_resp': 'f'},
      {'faces': 'faces/female_sad.jpg', 'emotion': 'sad', 'correct_resp': 'h'},
      {'faces': 'faces/female_neutral.jpg', 'emotion': 'neutral', 'correct_resp': 'g'},
      {'faces': 'faces/child_happy.jpg', 'emotion': 'happy', 'correct_resp': 'f'},
      {'faces': 'faces/child_sad.jpg', 'emotion': 'sad', 'correct_resp': 'h'},
      {'faces': 'faces/child_neutral.jpg', 'emotion': 'neutral', 'correct_resp': 'g'}]
    Routine Trial
  LoopTerminator trials
